<?xml version="1.0" encoding="UTF-8" standalone="yes"?>
<SDRun xmlns="http://stochdiff.textensor.org">
    <ReactionScheme>
        <Specie name="Ca" id="Ca" kdiff="174.3" kdiffunit="mu2/s"/>
        <Specie name="CaOut" id="CaOut" kdiff="3.0" kdiffunit="mu2/s"/>
        <Specie name="CaCbuf" id="CaCbuf" kdiff="10.0" kdiffunit="mu2/s"/>
        <Specie name="Cbuf" id="Cbuf" kdiff="10.0" kdiffunit="mu2/s"/>
        <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Leak" id="Leak" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s"/>
        <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s"/>
        <Specie name="CaBCa" id="CaBCa" kdiff="10.0" kdiffunit="mu2/s"/>
        <Specie name="CaB" id="CaB" kdiff="10.0" kdiffunit="mu2/s"/>
        <Specie name="FixedBuffer" id="FixedBuffer" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="FixedBufferC" id="FixedBufferC" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ISOOut" id="ISOOut" kdiff="10.0" kdiffunit="mu2/s"/>
        <Specie name="Ibuf" id="Ibuf" kdiff="1.0" kdiffunit="mu2/s"/>
        <Specie name="ISOIbuf" id="ISOIbuf" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Epac1" id="Epac1" kdiff="5.61" kdiffunit="mu2/s"/>
        <Specie name="Epac1cAMP" id="Epac1cAMP" kdiff="5.62" kdiffunit="mu2/s"/>
        <Specie name="pmca" id="pmca" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ncx" id="ncx" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="pmcaCa" id="pmcaCa" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ncxCa" id="ncxCa" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ISO" id="ISO" kdiff="111.4" kdiffunit="mu2/s"/>
        <Specie name="bAR" id="bAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Gs" id="Gs" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Gi" id="Gi" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ISObAR" id="ISObAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ISObARGs" id="ISObARGs" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcISObAR" id="PKAcISObAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcpISObAR" id="PKAcpISObAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcppISObAR" id="PKAcppISObAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcpppISObAR" id="PKAcpppISObAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="pISObAR" id="pISObAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ppISObAR" id="ppISObAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="pppISObAR" id="pppISObAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ppppISObAR" id="ppppISObAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ppppISObARGi" id="ppppISObARGi" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcbAR" id="PKAcbAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcpbAR" id="PKAcpbAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcppbAR" id="PKAcppbAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcpppbAR" id="PKAcpppbAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="pbAR" id="pbAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ppbAR" id="ppbAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="pppbAR" id="pppbAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ppppbAR" id="ppppbAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ppppbARGi" id="ppppbARGi" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GsbAR" id="GsbAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GasGTP" id="GasGTP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GasGDP" id="GasGDP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GaiGTP" id="GaiGTP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GaiGDP" id="GaiGDP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Gibg" id="Gibg" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Gsbg" id="Gsbg" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Da" id="Da" kdiff="10.0" kdiffunit="mu2/s"/>
        <Specie name="Dbuf" id="Dbuf" kdiff="1.0" kdiffunit="mu2/s"/>
        <Specie name="DaDbuf" id="DaDbuf" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="DaOut" id="DaOut" kdiff="1.0" kdiffunit="mu2/s"/>
        <Specie name="D1R" id="D1R" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="DaD1R" id="DaD1R" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="DaD1RGs" id="DaD1RGs" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GsD1R" id="GsD1R" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcDaD1RGs" id="PKAcDaD1RGs" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="pDaD1RGs" id="pDaD1RGs" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="pGsD1R" id="pGsD1R" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1" id="AC1" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1GasGTP" id="AC1GasGTP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1GasGTPCaMCa4" id="AC1GasGTPCaMCa4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1GasGTPCaMCa4ATP" id="AC1GasGTPCaMCa4ATP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1GaiGTP" id="AC1GaiGTP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1GaiGTPCaMCa4" id="AC1GaiGTPCaMCa4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1GaiGTPCaMCa4ATP" id="AC1GaiGTPCaMCa4ATP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1GasGTPGaiGTP" id="AC1GasGTPGaiGTP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1GasGTPGaiGTPCaMCa4" id="AC1GasGTPGaiGTPCaMCa4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1GsGiCaMCa4ATP" id="AC1GsGiCaMCa4ATP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="ATP" id="ATP" kdiff="1.0" kdiffunit="mu2/s"/>
        <Specie name="cAMP" id="cAMP" kdiff="86.4" kdiffunit="mu2/s"/>
        <Specie name="AC1CaMCa4" id="AC1CaMCa4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC1CaMCa4ATP" id="AC1CaMCa4ATP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC8" id="AC8" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC8CaMCa4" id="AC8CaMCa4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AC8CaMCa4ATP" id="AC8CaMCa4ATP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PDE1" id="PDE1" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PDE1CaMCa4" id="PDE1CaMCa4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PDE1CaMCa4cAMP" id="PDE1CaMCa4cAMP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="AMP" id="AMP" kdiff="84.8" kdiffunit="mu2/s"/>
        <Specie name="Ng" id="Ng" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="NgCaM" id="NgCaM" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="CaM" id="CaM" kdiff="4.0" kdiffunit="mu2/s"/>
        <Specie name="CaMCa2" id="CaMCa2" kdiff="4.0" kdiffunit="mu2/s"/>
        <Specie name="CaMCa4" id="CaMCa4" kdiff="4.0" kdiffunit="mu2/s"/>
        <Specie name="PP2B" id="PP2B" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PP2BCaM" id="PP2BCaM" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PP2CaMCa2" id="PP2BCaMCa2" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PP2BCaMCa4" id="PP2BCaMCa4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="CK" id="CK" kdiff="0.1" kdiffunit="mu2/s"/>
        <Specie name="CKCaMCa4" id="CKCaMCa4" kdiff="0.1" kdiffunit="mu2/s"/>
        <Specie name="CKpCaMCa4" id="CKpCaMCa4" kdiff="3.6" kdiffunit="mu2/s"/>
        <Specie name="CKp" id="CKp" kdiff="3.6" kdiffunit="mu2/s"/>
        <Specie name="CKpPP1" id="CKpPP1" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="CKpCaMCa4PP1" id="CKpCaMCa4PP1" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKA" id="PKA" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcAMP2" id="PKAcAMP2" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcAMP4" id="PKAcAMP4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAr" id="PKAr" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAc" id="PKAc" kdiff="0.836" kdiffunit="mu2/s"/>
        <Specie name="I1" id="I1" kdiff="9.49" kdiffunit="mu2/s"/>
        <Specie name="I1PKAc" id="I1PKAc" kdiff="10.6" kdiffunit="mu2/s"/>
        <Specie name="Ip35" id="Ip35" kdiff="7.02" kdiffunit="mu2/s"/>
        <Specie name="PP1" id="PP1" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Ip35PP1" id="Ip35PP1" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Ip35PP2BCaMCa4" id="Ip35PP2BCaMCa4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="Ip35PP1PP2BCaMCa4" id="Ip35PP1PP2BCaMCa4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="NMDAR" id="NMDAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcNMDAR" id="PKAcNMDAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="pNMDAR" id="pNMDAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PP2BpNMDAR" id="PP2BpNMDAR" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1" id="GluR1" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S845" id="GluR1_S845" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S831" id="GluR1_S831" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S845_S831" id="GluR1_S845_S831" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_PKAc" id="GluR1_PKAc" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_CKCaM" id="GluR1_CKCaM" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_CKpCaM" id="GluR1_CKpCaM" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_CKp" id="GluR1_CKp" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S845_CKCaM" id="GluR1_S845_CKCaM" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S845_CKpCaM" id="GluR1_S845_CKpCaM" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S845_CKp" id="GluR1_S845_CKp" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S831_PKAc" id="GluR1_S831_PKAc" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S845_PP1" id="GluR1_S845_PP1" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S845_S831_PP1" id="GluR1_S845_S831_PP1" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S831_PP1" id="GluR1_S831_PP1" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S845_PP2B" id="GluR1_S845_PP2B" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="GluR1_S845_S831_PP2B" id="GluR1_S845_S831_PP2B" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PDE4" id="PDE4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PDE4cAMP" id="PDE4cAMP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAcPDE4" id="PKAcPDE4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="pPDE4" id="pPDE4" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="pPDE4cAMP" id="pPDE4cAMP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Specie name="PKAc_PDE4_cAMP" id="PKAc_PDE4_cAMP" kdiff="0.0" kdiffunit="mu2/s"/>
        <Reaction name="Ca_pump1a" id="Ca_pump1a">
            <Reactant specieID="Ca"/>
            <Reactant specieID="pmca"/>
            <Product specieID="pmcaCa"/>
            <forwardRate>5.0E-5</forwardRate>
            <reverseRate>0.009</reverseRate>
        </Reaction>
        <Reaction name="Ca_pump1b" id="Ca_pump1b">
            <Reactant specieID="pmcaCa"/>
            <Product specieID="pmca"/>
            <Product specieID="CaOut"/>
            <forwardRate>0.003</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="Ca_pump2a" id="Ca_pump2a">
            <Reactant specieID="Ca"/>
            <Reactant specieID="ncx"/>
            <Product specieID="ncxCa"/>
            <forwardRate>1.1E-5</forwardRate>
            <reverseRate>0.0112</reverseRate>
        </Reaction>
        <Reaction name="Ca_pump2b" id="Ca_pump2b">
            <Reactant specieID="ncxCa"/>
            <Product specieID="ncx"/>
            <Product specieID="CaOut"/>
            <forwardRate>0.0056</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="Ca_leak" id="Ca_leak">
            <Reactant specieID="CaOut"/>
            <Reactant specieID="Leak"/>
            <Product specieID="CaOutLeak"/>
            <forwardRate>1.0E-8</forwardRate>
            <reverseRate>0.0011</reverseRate>
        </Reaction>
        <Reaction name="Ca_leak" id="Ca_leak">
            <Reactant specieID="CaOutLeak"/>
            <Product specieID="Ca"/>
            <Product specieID="Leak"/>
            <forwardRate>0.0011</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="Ca_buffer" id="Ca_Buffer">
            <Reactant specieID="Ca"/>
            <Reactant specieID="Calbin"/>
            <Product specieID="CalbinC"/>
            <forwardRate>2.8E-5</forwardRate>
            <reverseRate>19.6</reverseRate>
        </Reaction>
        <Reaction name="Ca_fixed_buffer" id="Ca_Fixed_Buffer">
            <Reactant specieID="Ca"/>
            <Reactant specieID="FixedBuffer"/>
            <Product specieID="FixedBufferC"/>
            <forwardRate>4.0E-5</forwardRate>
            <reverseRate>4.0</reverseRate>
        </Reaction>
        <Reaction name="CaIn_buffer" id="CaIn_buffer">
            <Reactant specieID="Ca"/>
            <Reactant specieID="CaB"/>
            <Product specieID="CaBCa"/>
            <forwardRate>2.8E-4</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="CaCbuf--Ca+Cbuf" id="CaCbuf--Ca+Cbuf">
            <Reactant specieID="CaCbuf"/>
            <Product specieID="Cbuf"/>
            <Product specieID="Ca"/>
            <forwardRate>0.02</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="CaOut+Cbuf--NULL" id="CaOut_Cbuf--NULL">
            <Reactant specieID="CaOut"/>
            <Reactant specieID="Cbuf"/>
            <forwardRate>1.0E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="ISO_buffer" id="ISO_Buffer">
            <Reactant specieID="ISO"/>
            <Product specieID="ISOOut"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>5.5E-9</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ISOIbuf--ISO+Ibuf" id="ISOIbuf--ISO+Ibuf">
            <Reactant specieID="ISOIbuf"/>
            <Product specieID="Ibuf"/>
            <Product specieID="ISO"/>
            <forwardRate>0.02</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="ISOOut+Ibuf--NULL" id="ISOOut_buf--NULL">
            <Reactant specieID="ISOOut"/>
            <Reactant specieID="Ibuf"/>
            <forwardRate>1.0E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="ISObAR_bind" id="ISObAR_bind">
            <Reactant specieID="ISO"/>
            <Reactant specieID="bAR"/>
            <Product specieID="ISObAR"/>
            <forwardRate>5.555E-6</forwardRate>
            <reverseRate>0.005</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ISObARGs_bind" id="ISObARGs_bind">
            <Reactant specieID="ISObAR"/>
            <Reactant specieID="Gs"/>
            <Product specieID="ISObARGs"/>
            <forwardRate>6.0E-7</forwardRate>
            <reverseRate>1.0E-6</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GsbAR_bind" id="GsbAR_bind">
            <Reactant specieID="Gs"/>
            <Reactant specieID="bAR"/>
            <Product specieID="GsbAR"/>
            <forwardRate>4.0E-8</forwardRate>
            <reverseRate>3.0E-7</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GsbARISO_bind" id="GsbARISO_bind">
            <Reactant specieID="GsbAR"/>
            <Reactant specieID="ISO"/>
            <Product specieID="ISObARGs"/>
            <forwardRate>2.5E-6</forwardRate>
            <reverseRate>5.0E-4</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GasGTP_bind" id="GasGTP_bind">
            <Reactant specieID="ISObARGs"/>
            <Product specieID="ISObAR"/>
            <Product specieID="GasGTP"/>
            <Product specieID="Gsbg"/>
            <forwardRate>0.025</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="DaDbuf--Da+Dbuf" id="DaDbuf--Da+Dbuf">
            <Reactant specieID="DaDbuf"/>
            <Product specieID="Dbuf"/>
            <Product specieID="Da"/>
            <forwardRate>0.02</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="Da--DaOut" id="Da--DaOut">
            <Reactant specieID="Da"/>
            <Product specieID="DaOut"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>5.5E-9</reverseRate>
        </Reaction>
        <Reaction name="DaOut+Dbuf--NULL" id="DaOut_buf--NULL">
            <Reactant specieID="DaOut"/>
            <Reactant specieID="Dbuf"/>
            <forwardRate>1.0E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="Da+D1R--DaD1R" id="Da+D1R--DaD1R">
            <Reactant specieID="Da"/>
            <Reactant specieID="D1R"/>
            <Product specieID="DaD1R"/>
            <forwardRate>1.66667E-6</forwardRate>
            <reverseRate>0.005</reverseRate>
        </Reaction>
        <Reaction name="DaD1R+Gs--DaD1RGs" id="DaD1R+Gs--DaD1RGs">
            <Reactant specieID="DaD1R"/>
            <Reactant specieID="Gs"/>
            <Product specieID="DaD1RGs"/>
            <forwardRate>3.0E-5</forwardRate>
            <reverseRate>4.0E-4</reverseRate>
        </Reaction>
        <Reaction name="Gsabg+D1R--GsD1R" id="Gsabg+D1R--GsD1R">
            <Reactant specieID="Gs"/>
            <Reactant specieID="D1R"/>
            <Product specieID="GsD1R"/>
            <forwardRate>1.0E-5</forwardRate>
            <reverseRate>4.0E-4</reverseRate>
        </Reaction>
        <Reaction name="GsD1R+Da--DaD1RGs" id="GD1R+Da--DaD1RGs">
            <Reactant specieID="GsD1R"/>
            <Reactant specieID="Da"/>
            <Product specieID="DaD1RGs"/>
            <forwardRate>5.0E-6</forwardRate>
            <reverseRate>0.005</reverseRate>
        </Reaction>
        <Reaction name="DaD1RGs-DaD1R+GsaGTP+Gbg reac" id="DaD1RGs-DaD1R+GsaGTP+Gbg_id">
            <Reactant specieID="DaD1RGs"/>
            <Product specieID="DaD1R"/>
            <Product specieID="GasGTP"/>
            <Product specieID="Gsbg"/>
            <forwardRate>1.5E-4</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="DaD1RGs phosp1" id="phospDaD1RGs1">
            <Reactant specieID="PKAc"/>
            <Reactant specieID="DaD1RGs"/>
            <Product specieID="PKAcDaD1RGs"/>
            <forwardRate>6.0E-7</forwardRate>
            <reverseRate>2.5E-4</reverseRate>
        </Reaction>
        <Reaction name="DaD1RGs phosp2" id="phospDaD1RGs2">
            <Reactant specieID="PKAcDaD1RGs"/>
            <Product specieID="pDaD1RGs"/>
            <Product specieID="PKAc"/>
            <forwardRate>6.0E-5</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="Da_dissoc" id="Da_dissoc">
            <Reactant specieID="pDaD1RGs"/>
            <Product specieID="pGsD1R"/>
            <Product specieID="Da"/>
            <forwardRate>0.1</forwardRate>
            <reverseRate>1.0E-4</reverseRate>
        </Reaction>
        <Reaction name="Da_dissoc" id="Da_dissoc">
            <Reactant specieID="pGsD1R"/>
            <Product specieID="GsD1R"/>
            <forwardRate>2.0E-5</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="dephosD1R" id="dphospD1R">
            <Reactant specieID="pDaD1RGs"/>
            <Product specieID="Gs"/>
            <Product specieID="D1R"/>
            <Product specieID="Da"/>
            <forwardRate>2.0E-7</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="ISObAR_phos" id="ISObAR_phos">
            <Reactant specieID="ISObAR"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="PKAcISObAR"/>
            <forwardRate>8.0E-7</forwardRate>
            <reverseRate>0.00448</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pISObAR_reac" id="pISObAR_reac">
            <Reactant specieID="PKAcISObAR"/>
            <Product specieID="pISObAR"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pISObAR_phos" id="pISObAR_phos">
            <Reactant specieID="pISObAR"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="PKAcpISObAR"/>
            <forwardRate>8.0E-7</forwardRate>
            <reverseRate>0.00448</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppISObAR_reac" id="ppISObAR_reac">
            <Reactant specieID="PKAcpISObAR"/>
            <Product specieID="ppISObAR"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppISObAR_phos" id="ppISObAR_phos">
            <Reactant specieID="ppISObAR"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="PKAcppISObAR"/>
            <forwardRate>1.712E-5</forwardRate>
            <reverseRate>0.00448</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pppISObAR_reac" id="pppISObAR_reac">
            <Reactant specieID="PKAcppISObAR"/>
            <Product specieID="pppISObAR"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pppISObAR_phos" id="pppISObAR_phos">
            <Reactant specieID="pppISObAR"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="PKAcpppISObAR"/>
            <forwardRate>0.001712</forwardRate>
            <reverseRate>0.00448</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppppISObAR_reac" id="ppppISObAR_reac">
            <Reactant specieID="PKAcpppISObAR"/>
            <Product specieID="ppppISObAR"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppppISObARGi_bind" id="ppppISObARGi_bind">
            <Reactant specieID="ppppISObAR"/>
            <Reactant specieID="Gi"/>
            <Product specieID="ppppISObARGi"/>
            <forwardRate>1.5E-4</forwardRate>
            <reverseRate>2.5E-4</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GaiGTP_bind" id="GaiGTP_bind">
            <Reactant specieID="ppppISObARGi"/>
            <Product specieID="Gibg"/>
            <Product specieID="ppppISObAR"/>
            <Product specieID="GaiGTP"/>
            <forwardRate>2.0E-4</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pISObAR_dephos" id="pISObAR_dephos">
            <Reactant specieID="pISObAR"/>
            <Product specieID="ISObAR"/>
            <forwardRate>2.5E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppISObAR_dephos" id="ppISObAR_dephos">
            <Reactant specieID="ppISObAR"/>
            <Product specieID="pISObAR"/>
            <forwardRate>2.5E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pppISObAR_dephos" id="pppISObAR_dephos">
            <Reactant specieID="pppISObAR"/>
            <Product specieID="ppISObAR"/>
            <forwardRate>2.5E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppppISObAR_dephos" id="ppppISObAR_dephos">
            <Reactant specieID="ppppISObAR"/>
            <Product specieID="pppISObAR"/>
            <forwardRate>2.5E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="bAR_phos" id="bAR_phos">
            <Reactant specieID="bAR"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="PKAcbAR"/>
            <forwardRate>4.0E-8</forwardRate>
            <reverseRate>0.00448</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pbAR_reac" id="pbAR_reac">
            <Reactant specieID="PKAcbAR"/>
            <Product specieID="pbAR"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pbAR_phos" id="pbAR_phos">
            <Reactant specieID="pbAR"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="PKAcpbAR"/>
            <forwardRate>4.0E-7</forwardRate>
            <reverseRate>0.00448</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppbAR_reac" id="ppbAR_reac">
            <Reactant specieID="PKAcpbAR"/>
            <Product specieID="ppbAR"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppbAR_phos" id="ppbAR_phos">
            <Reactant specieID="ppbAR"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="PKAcppbAR"/>
            <forwardRate>4.0E-6</forwardRate>
            <reverseRate>0.00448</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pppbAR_reac" id="pppbAR_reac">
            <Reactant specieID="PKAcppbAR"/>
            <Product specieID="pppbAR"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pppbAR_phos" id="pppbAR_phos">
            <Reactant specieID="pppbAR"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="PKAcpppbAR"/>
            <forwardRate>4.0E-4</forwardRate>
            <reverseRate>0.00448</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppppbAR_reac" id="ppppbAR_reac">
            <Reactant specieID="PKAcpppbAR"/>
            <Product specieID="ppppbAR"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppppbARGi_bind" id="ppppbARGi_bind">
            <Reactant specieID="ppppbAR"/>
            <Reactant specieID="Gi"/>
            <Product specieID="ppppbARGi"/>
            <forwardRate>7.5E-5</forwardRate>
            <reverseRate>1.25E-4</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GaiGTP_bind_r" id="GaiGTP_bind_r">
            <Reactant specieID="ppppbARGi"/>
            <Product specieID="ppppbAR"/>
            <Product specieID="Gibg"/>
            <Product specieID="GaiGTP"/>
            <forwardRate>1.0E-4</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pbAR_dephos" id="pbAR_dephos">
            <Reactant specieID="pbAR"/>
            <Product specieID="bAR"/>
            <forwardRate>2.5E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppbAR_dephos" id="ppbAR_dephos">
            <Reactant specieID="ppbAR"/>
            <Product specieID="pbAR"/>
            <forwardRate>2.5E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pppbAR_dephos" id="pppbAR_dephos">
            <Reactant specieID="pppbAR"/>
            <Product specieID="ppbAR"/>
            <forwardRate>2.5E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ppppbAR_dephos" id="ppppbAR_dephos">
            <Reactant specieID="ppppbAR"/>
            <Product specieID="pppbAR"/>
            <forwardRate>2.5E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GasGTP_disso" id="GasGTP_disso">
            <Reactant specieID="GasGTP"/>
            <Product specieID="GasGDP"/>
            <forwardRate>0.01</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="Gs_form" id="Gs_form">
            <Reactant specieID="GasGDP"/>
            <Reactant specieID="Gsbg"/>
            <Product specieID="Gs"/>
            <forwardRate>0.1</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GaiGTP_disso" id="GaiGTP_disso">
            <Reactant specieID="GaiGTP"/>
            <Product specieID="GaiGDP"/>
            <forwardRate>1.25E-4</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="Gi_form" id="Gi_form">
            <Reactant specieID="GaiGDP"/>
            <Reactant specieID="Gibg"/>
            <Product specieID="Gi"/>
            <forwardRate>0.00125</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GasGTP_AC1_reac" id="GasGTP_AC1_reac">
            <Reactant specieID="GasGTP"/>
            <Reactant specieID="AC1"/>
            <Product specieID="AC1GasGTP"/>
            <forwardRate>3.85E-5</forwardRate>
            <reverseRate>0.01</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1GasGTP_CaMCa4_Reac" id="AC1GasGTP_CaMCa4_Reac">
            <Reactant specieID="AC1GasGTP"/>
            <Reactant specieID="CaMCa4"/>
            <Product specieID="AC1GasGTPCaMCa4"/>
            <forwardRate>6.0E-6</forwardRate>
            <reverseRate>9.0E-4</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1GasGTPCaMCa4_ATP_Reac" id="AC1GasGTPCaMCa4_ATP_Reac">
            <Reactant specieID="AC1GasGTPCaMCa4"/>
            <Reactant specieID="ATP"/>
            <Product specieID="AC1GasGTPCaMCa4ATP"/>
            <forwardRate>1.0E-5</forwardRate>
            <reverseRate>2.273</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1GasGTPCaMCa4ATP_diss" id="AC1GasGTPCaMCa4ATP_diss">
            <Reactant specieID="AC1GasGTPCaMCa4ATP"/>
            <Product specieID="cAMP"/>
            <Product specieID="AC1GasGTPCaMCa4"/>
            <forwardRate>0.02842</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GaiGTP_AC1GasGTP_reac" id="GaiGTP_AC1GasGTP_reac">
            <Reactant specieID="GaiGTP"/>
            <Reactant specieID="AC1GasGTP"/>
            <Product specieID="AC1GasGTPGaiGTP"/>
            <forwardRate>6.25E-5</forwardRate>
            <reverseRate>0.01</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1GasGTPGaiGTP_CaMCa4_Reac" id="AC1GasGTPGaiGTP_CaMCa4_Reac">
            <Reactant specieID="AC1GasGTPGaiGTP"/>
            <Reactant specieID="CaMCa4"/>
            <Product specieID="AC1GasGTPGaiGTPCaMCa4"/>
            <forwardRate>6.0E-6</forwardRate>
            <reverseRate>9.0E-4</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1GasGTPGaiGTPCaMCa4_ATP_Reac" id="AC1GasGTPGaiGTPCaMCa4_ATP_Reac">
            <Reactant specieID="AC1GasGTPGaiGTPCaMCa4"/>
            <Reactant specieID="ATP"/>
            <Product specieID="AC1GsGiCaMCa4ATP"/>
            <forwardRate>1.0E-5</forwardRate>
            <reverseRate>2.273</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1GsGiCaMCa4ATP_diss" id="AC1GsGiCaMCa4ATP_diss">
            <Reactant specieID="AC1GsGiCaMCa4ATP"/>
            <Product specieID="cAMP"/>
            <Product specieID="AC1GasGTPGaiGTPCaMCa4"/>
            <forwardRate>0.002842</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GaiGTP_AC1CaMCa4_reac" id="GaiGTP_AC1CaMCa4_reac">
            <Reactant specieID="GaiGTP"/>
            <Reactant specieID="AC1CaMCa4"/>
            <Product specieID="AC1GaiGTPCaMCa4"/>
            <forwardRate>6.25E-5</forwardRate>
            <reverseRate>0.01</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1GaiGTPCaMCa4_ATP_Reac" id="AC1GaiGTPCaMCa4_ATP_Reac">
            <Reactant specieID="AC1GaiGTPCaMCa4"/>
            <Reactant specieID="ATP"/>
            <Product specieID="AC1GaiGTPCaMCa4ATP"/>
            <forwardRate>1.0E-5</forwardRate>
            <reverseRate>2.273</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1GaiGTPCaMCa4ATP_diss" id="AC1GaiGTPCaMCa4ATP_diss">
            <Reactant specieID="AC1GaiGTPCaMCa4ATP"/>
            <Product specieID="cAMP"/>
            <Product specieID="AC1GaiGTPCaMCa4"/>
            <forwardRate>5.684E-4</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1CaMCa4_Reac" id="AC1CaMCa4_Reac">
            <Reactant specieID="AC1"/>
            <Reactant specieID="CaMCa4"/>
            <Product specieID="AC1CaMCa4"/>
            <forwardRate>6.0E-6</forwardRate>
            <reverseRate>9.0E-4</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1CaMCa4ATP_bind" id="AC1CaMCa4ATP_bind">
            <Reactant specieID="AC1CaMCa4"/>
            <Reactant specieID="ATP"/>
            <Product specieID="AC1CaMCa4ATP"/>
            <forwardRate>1.0E-5</forwardRate>
            <reverseRate>2.273</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1CaMCa4ATP_disso" id="AC1CaMCa4ATP_disso">
            <Reactant specieID="AC1CaMCa4ATP"/>
            <Product specieID="cAMP"/>
            <Product specieID="AC1CaMCa4"/>
            <forwardRate>0.005684</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC1GaiGTP_GasGTP_Reac" id="AC1GaiGTP_GasGTP_Reac">
            <Reactant specieID="AC1GaiGTP"/>
            <Reactant specieID="GasGTP"/>
            <Product specieID="AC1GasGTPGaiGTP"/>
            <forwardRate>6.25E-5</forwardRate>
            <reverseRate>0.01</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC8_CaMCa4_bind" id="AC8_CaMCa4_bind">
            <Reactant specieID="AC8"/>
            <Reactant specieID="CaMCa4"/>
            <Product specieID="AC8CaMCa4"/>
            <forwardRate>1.25E-6</forwardRate>
            <reverseRate>0.001</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC8CaMCa4_ATP_bind" id="AC8CaMCa4_ATP_bind">
            <Reactant specieID="AC8CaMCa4"/>
            <Reactant specieID="ATP"/>
            <Product specieID="AC8CaMCa4ATP"/>
            <forwardRate>1.0E-5</forwardRate>
            <reverseRate>2.273</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="AC8CaMCa4ATP_disso" id="AC8CaMCa4ATP_disso">
            <Reactant specieID="AC8CaMCa4ATP"/>
            <Product specieID="cAMP"/>
            <Product specieID="AC8CaMCa4"/>
            <forwardRate>0.002842</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="CaM_bind" id="CaM_bind">
            <Reactant specieID="CaM"/>
            <Reactant specieID="Ca" n="2"/>
            <Product specieID="CaMCa2"/>
            <forwardRate>6.0E-6</forwardRate>
            <reverseRate>0.0091</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="CaMCa2_bind" id="CaMCa2_bind">
            <Reactant specieID="CaMCa2"/>
            <Reactant specieID="Ca" n="2"/>
            <Product specieID="CaMCa4"/>
            <forwardRate>1.0E-4</forwardRate>
            <reverseRate>1.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="NgCaM_bind" id="NgCaM_bind">
            <Reactant specieID="CaM"/>
            <Reactant specieID="Ng"/>
            <Product specieID="NgCaM"/>
            <forwardRate>2.8E-5</forwardRate>
            <reverseRate>0.036</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PP2_bind" id="PP2_bind">
            <Reactant specieID="CaM"/>
            <Reactant specieID="PP2B"/>
            <Product specieID="PP2BCaM"/>
            <forwardRate>4.6E-6</forwardRate>
            <reverseRate>1.2E-6</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PP2CaMC2_bind" id="PP2CaMC2_bind">
            <Reactant specieID="CaMCa2"/>
            <Reactant specieID="PP2B"/>
            <Product specieID="PP2BCaMCa2"/>
            <forwardRate>4.6E-5</forwardRate>
            <reverseRate>1.2E-6</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PP2CaMCa4_bind" id="PP2CaMCa4_bind">
            <Reactant specieID="CaMCa4"/>
            <Reactant specieID="PP2B"/>
            <Product specieID="PP2BCaMCa4"/>
            <forwardRate>4.6E-5</forwardRate>
            <reverseRate>1.2E-6</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PP2CaMCa_bind" id="PP2CaMCa_bind">
            <Reactant specieID="PP2BCaM"/>
            <Reactant specieID="Ca" n="2"/>
            <Product specieID="PP2BCaMCa2"/>
            <forwardRate>6.0E-4</forwardRate>
            <reverseRate>0.091</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PP2CaMCa2Ca_bind" id="PP2CaMCa2Ca_bind">
            <Reactant specieID="PP2BCaMCa2"/>
            <Reactant specieID="Ca" n="2"/>
            <Product specieID="PP2BCaMCa4"/>
            <forwardRate>1.0E-4</forwardRate>
            <reverseRate>1.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="CK bind" id="CK_bind">
            <Reactant specieID="CaMCa4"/>
            <Reactant specieID="CK"/>
            <Product specieID="CKCaMCa4"/>
            <forwardRate>2.0E-5</forwardRate>
            <reverseRate>0.00195</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="CKCaM bind1" id="CKCaM_bind1">
            <Reactant specieID="CKCaMCa4" power="4"/>
            <Product specieID="CKCaMCa4" power="3"/>
            <Product specieID="CKpCaMCa4"/>
            <forwardRate>3.5E-17</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>2.0</Q10>
        </Reaction>
        <Reaction name="CKCaM bind2" id="CKCaM_bind2">
            <Reactant specieID="CKCaMCa4" power="3"/>
            <Product specieID="CKCaMCa4" power="2"/>
            <Product specieID="CKpCaMCa4"/>
            <forwardRate>4.0E-11</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>2.0</Q10>
        </Reaction>
        <Reaction name="CKCaM bind3" id="CKCaM_bind3">
            <Reactant specieID="CKpCaMCa4" power="2"/>
            <Reactant specieID="CKCaMCa4" power="2"/>
            <Product specieID="CKCaMCa4"/>
            <Product specieID="CKpCaMCa4" power="3"/>
            <forwardRate>5.51E-17</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>2.0</Q10>
        </Reaction>
        <Reaction name="CKp auto" id="CKp_auto">
            <Reactant specieID="CKpCaMCa4"/>
            <Product specieID="CaMCa4"/>
            <Product specieID="CKp"/>
            <forwardRate>1.0E-6</forwardRate>
            <reverseRate>2.0E-5</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="CKp bind" id="CKp_bind">
            <Reactant specieID="CKp"/>
            <Reactant specieID="PP1"/>
            <Product specieID="CKpPP1"/>
            <forwardRate>9.0E-9</forwardRate>
            <reverseRate>8.0E-5</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="CKpPP1 reac" id="CKpPP1_reac">
            <Reactant specieID="CKpPP1"/>
            <Product specieID="PP1"/>
            <Product specieID="CK"/>
            <forwardRate>1.0E-5</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="CKpCaMCa4PP1_bind" id="CKpCaMPP1_bind">
            <Reactant specieID="CKpCaMCa4"/>
            <Reactant specieID="PP1"/>
            <Product specieID="CKpCaMCa4PP1"/>
            <forwardRate>2.25E-9</forwardRate>
            <reverseRate>9.0E-5</reverseRate>
        </Reaction>
        <Reaction name="CKpCaMCa4PP1_reac" id="CKpCaMPP1_reac">
            <Reactant specieID="CKpCaMCa4PP1"/>
            <Product specieID="PP1"/>
            <Product specieID="CKCaMCa4"/>
            <forwardRate>4.5E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
        </Reaction>
        <Reaction name="PKA_bind" id="PKA_bind">
            <Reactant specieID="PKA"/>
            <Reactant specieID="cAMP" n="2"/>
            <Product specieID="PKAcAMP2"/>
            <forwardRate>2.60868E-7</forwardRate>
            <reverseRate>6.0E-5</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PKAcAMP2_bind" id="PKAcAMP2_bind">
            <Reactant specieID="PKAcAMP2"/>
            <Reactant specieID="cAMP" n="2"/>
            <Product specieID="PKAcAMP4"/>
            <forwardRate>3.46218E-7</forwardRate>
            <reverseRate>6.0E-4</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="Epac_camps_cAMP_bind" id="Epac_camps_cAMP_bind">
            <Reactant specieID="Epac1"/>
            <Reactant specieID="cAMP"/>
            <Product specieID="Epac1cAMP"/>
            <forwardRate>3.1E-8</forwardRate>
            <reverseRate>6.51E-5</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="I1_bind" id="I1_bind">
            <Reactant specieID="I1"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="I1PKAc"/>
            <forwardRate>1.4E-6</forwardRate>
            <reverseRate>0.0056</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="I1PKAc_reac" id="I1PKAc_reac">
            <Reactant specieID="I1PKAc"/>
            <Product specieID="Ip35"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.0014</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="Ip35_bind" id="Ip35_bind">
            <Reactant specieID="Ip35"/>
            <Reactant specieID="PP1"/>
            <Product specieID="Ip35PP1"/>
            <forwardRate>1.0E-6</forwardRate>
            <reverseRate>1.1E-6</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="Ip35pp2b_bind" id="Ip35pp2b_bind">
            <Reactant specieID="Ip35"/>
            <Reactant specieID="PP2BCaMCa4"/>
            <Product specieID="Ip35PP2BCaMCa4"/>
            <forwardRate>9.625E-5</forwardRate>
            <reverseRate>0.33</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="Ip35pp2b_reac" id="Ip35pp2b_reac">
            <Reactant specieID="Ip35PP2BCaMCa4"/>
            <Product specieID="I1"/>
            <Product specieID="PP2BCaMCa4"/>
            <forwardRate>0.055</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="Ip35pp1_bind" id="Ip35pp1_bind">
            <Reactant specieID="Ip35PP1"/>
            <Reactant specieID="PP2BCaMCa4"/>
            <Product specieID="Ip35PP1PP2BCaMCa4"/>
            <forwardRate>9.625E-5</forwardRate>
            <reverseRate>0.33</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="Ip35p1p2_reac" id="Ip35p1p2_reac">
            <Reactant specieID="Ip35PP1PP2BCaMCa4"/>
            <Product specieID="I1"/>
            <Product specieID="PP1"/>
            <Product specieID="PP2BCaMCa4"/>
            <forwardRate>0.055</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="NMDAR_PKAc_bind" id="NMDAR_PKAc_bind">
            <Reactant specieID="NMDAR"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="PKAcNMDAR"/>
            <forwardRate>1.02E-5</forwardRate>
            <reverseRate>0.72</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pNMDAR_PKAc_diss" id="pNMDAR_PKAc_diss">
            <Reactant specieID="PKAcNMDAR"/>
            <Product specieID="pNMDAR"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.006</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pNMDAR_PP2B_bind" id="pNMDAR_PP2B_bind">
            <Reactant specieID="pNMDAR"/>
            <Reactant specieID="PP2BCaMCa4"/>
            <Product specieID="PP2BpNMDAR"/>
            <forwardRate>1.6E-5</forwardRate>
            <reverseRate>0.008</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pNMDAR_PP2B_diss" id="pNMDAR_PP2B_diss">
            <Reactant specieID="PP2BpNMDAR"/>
            <Product specieID="NMDAR"/>
            <Product specieID="PP2BCaMCa4"/>
            <forwardRate>0.001</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_PKAc_bind" id="GluR1_PKAc_bind">
            <Reactant specieID="GluR1"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="GluR1_PKAc"/>
            <forwardRate>4.824E-4</forwardRate>
            <reverseRate>0.72</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_PKAc_diss" id="GluR1_PKAc_diss">
            <Reactant specieID="GluR1_PKAc"/>
            <Product specieID="GluR1_S845"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.006</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_CKCaM_bind" id="GluR1_CKCaM_bind">
            <Reactant specieID="GluR1"/>
            <Reactant specieID="CKCaMCa4"/>
            <Product specieID="GluR1_CKCaM"/>
            <forwardRate>3.2224E-7</forwardRate>
            <reverseRate>0.0016</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_CKCaM_diss" id="GluR1_CKCaM_diss">
            <Reactant specieID="GluR1_CKCaM"/>
            <Product specieID="GluR1_S831"/>
            <Product specieID="CKCaMCa4"/>
            <forwardRate>0.006</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_CKpCaM_bind" id="GluR1_CKpCaM_bind">
            <Reactant specieID="GluR1"/>
            <Reactant specieID="CKpCaMCa4"/>
            <Product specieID="GluR1_CKpCaM"/>
            <forwardRate>3.278E-7</forwardRate>
            <reverseRate>0.002</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_CKpCaM_diss" id="GluR1_CKpCaM_diss">
            <Reactant specieID="GluR1_CKpCaM"/>
            <Product specieID="GluR1_S831"/>
            <Product specieID="CKpCaMCa4"/>
            <forwardRate>0.006</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_CKp_bind" id="GluR1_CKp_bind">
            <Reactant specieID="GluR1"/>
            <Reactant specieID="CKp"/>
            <Product specieID="GluR1_CKp"/>
            <forwardRate>1.6224E-7</forwardRate>
            <reverseRate>0.0016</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_CKp_diss" id="GluR1_CKp_diss">
            <Reactant specieID="GluR1_CKp"/>
            <Product specieID="GluR1_S831"/>
            <Product specieID="CKp"/>
            <forwardRate>0.006</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_CKCaM_bind" id="GluR1_S845_CKCaM_bind">
            <Reactant specieID="GluR1_S845"/>
            <Reactant specieID="CKCaMCa4"/>
            <Product specieID="GluR1_S845_CKCaM"/>
            <forwardRate>3.2224E-7</forwardRate>
            <reverseRate>0.0016</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_CKCaM_diss" id="GluR1_S845_CKCaM_diss">
            <Reactant specieID="GluR1_S845_CKCaM"/>
            <Product specieID="GluR1_S845_S831"/>
            <Product specieID="CKCaMCa4"/>
            <forwardRate>0.006</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_CKpCaM_bind" id="GluR1_S845_CKpCaM_bind">
            <Reactant specieID="GluR1_S845"/>
            <Reactant specieID="CKpCaMCa4"/>
            <Product specieID="GluR1_S845_CKpCaM"/>
            <forwardRate>3.278E-7</forwardRate>
            <reverseRate>0.002</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_CKpCaM_diss" id="GluR1_S845_CKpCaM_diss">
            <Reactant specieID="GluR1_S845_CKpCaM"/>
            <Product specieID="GluR1_S845_S831"/>
            <Product specieID="CKpCaMCa4"/>
            <forwardRate>0.006</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_CKp_bind" id="GluR1_S845_CKp_bind">
            <Reactant specieID="GluR1_S845"/>
            <Reactant specieID="CKp"/>
            <Product specieID="GluR1_S845_CKp"/>
            <forwardRate>3.2224E-7</forwardRate>
            <reverseRate>0.001</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_CKp_diss" id="GluR1_S845_CKp_diss">
            <Reactant specieID="GluR1_S845_CKp"/>
            <Product specieID="GluR1_S845_S831"/>
            <Product specieID="CKp"/>
            <forwardRate>0.006</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S831_PKAc_bind" id="GluR1_S831_PKAc_bind">
            <Reactant specieID="GluR1_S831"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="GluR1_S831_PKAc"/>
            <forwardRate>4.824E-4</forwardRate>
            <reverseRate>0.72</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S831_PKAc_diss" id="GluR1_S831_PKAc_diss">
            <Reactant specieID="GluR1_S831_PKAc"/>
            <Product specieID="GluR1_S845_S831"/>
            <Product specieID="PKAc"/>
            <forwardRate>0.006</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_PP1_bind" id="GluR1_S845_PP1_bind">
            <Reactant specieID="GluR1_S845"/>
            <Reactant specieID="PP1"/>
            <Product specieID="GluR1_S845_PP1"/>
            <forwardRate>8.7E-4</forwardRate>
            <reverseRate>0.68</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_PP1_diss" id="GluR1_S845_PP1_diss">
            <Reactant specieID="GluR1_S845_PP1"/>
            <Product specieID="GluR1"/>
            <Product specieID="PP1"/>
            <forwardRate>0.001</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_S831_PP1_bind" id="GluR1_S845_S831_PP1_bind">
            <Reactant specieID="GluR1_S845_S831"/>
            <Reactant specieID="PP1"/>
            <Product specieID="GluR1_S845_S831_PP1"/>
            <forwardRate>8.75E-6</forwardRate>
            <reverseRate>0.014</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_S831_PP1_diss" id="GluR1_S845_S831_PP1_diss">
            <Reactant specieID="GluR1_S845_S831_PP1"/>
            <Product specieID="GluR1_S845"/>
            <Product specieID="PP1"/>
            <forwardRate>0.001</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_S831_PP1_diss2" id="GluR1_S845_S831_PP1_diss2">
            <Reactant specieID="GluR1_S845_S831_PP1"/>
            <Product specieID="GluR1_S831"/>
            <Product specieID="PP1"/>
            <forwardRate>3.5E-4</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S831_PP1_bind" id="GluR1_S831_PP1_bind">
            <Reactant specieID="GluR1_S831"/>
            <Reactant specieID="PP1"/>
            <Product specieID="GluR1_S831_PP1"/>
            <forwardRate>8.75E-5</forwardRate>
            <reverseRate>0.14</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S831_PP1_diss" id="GluR1_S831_PP1_diss">
            <Reactant specieID="GluR1_S831_PP1"/>
            <Product specieID="GluR1"/>
            <Product specieID="PP1"/>
            <forwardRate>0.001</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_PP2B_bind" id="GluR1_S845_PP2B_bind">
            <Reactant specieID="GluR1_S845"/>
            <Reactant specieID="PP2BCaMCa4"/>
            <Product specieID="GluR1_S845_PP2B"/>
            <forwardRate>1.601E-4</forwardRate>
            <reverseRate>0.08</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_PP2B_diss" id="GluR1_S845_PP2B_diss">
            <Reactant specieID="GluR1_S845_PP2B"/>
            <Product specieID="GluR1"/>
            <Product specieID="PP2BCaMCa4"/>
            <forwardRate>0.001</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_S831_PP2B_bind" id="GluR1_S845_S831_PP2B_bind">
            <Reactant specieID="GluR1_S845_S831"/>
            <Reactant specieID="PP2BCaMCa4"/>
            <Product specieID="GluR1_S845_S831_PP2B"/>
            <forwardRate>0.001601</forwardRate>
            <reverseRate>0.8</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="GluR1_S845_S831_PP2B_diss" id="GluR1_S845_S831_PP2B_diss">
            <Reactant specieID="GluR1_S845_S831_PP2B"/>
            <Product specieID="GluR1_S831"/>
            <Product specieID="PP2BCaMCa4"/>
            <forwardRate>0.001</forwardRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PDE1CaMCa4_bind" id="PDE1CaMCa4_bind">
            <Reactant specieID="PDE1"/>
            <Reactant specieID="CaMCa4"/>
            <Product specieID="PDE1CaMCa4"/>
            <forwardRate>1.0E-4</forwardRate>
            <reverseRate>0.001</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PDE1CaMCa4cAMP_bind" id="PDE1CaMCa4cAMP_bind">
            <Reactant specieID="PDE1CaMCa4"/>
            <Reactant specieID="cAMP"/>
            <Product specieID="PDE1CaMCa4cAMP"/>
            <forwardRate>4.6E-6</forwardRate>
            <reverseRate>0.044</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PDE1cAMP_disso" id="PDE1cAMP_disso">
            <Reactant specieID="PDE1CaMCa4cAMP"/>
            <Product specieID="PDE1CaMCa4"/>
            <Product specieID="AMP"/>
            <forwardRate>0.011</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="ATP_regen" id="ATP_regen">
            <Reactant specieID="AMP"/>
            <Product specieID="ATP"/>
            <forwardRate>0.001</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PDE4 enzyme1" id="PDE4bind">
            <Reactant specieID="PDE4"/>
            <Reactant specieID="cAMP"/>
            <Product specieID="PDE4cAMP"/>
            <forwardRate>2.166E-5</forwardRate>
            <reverseRate>0.06895</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PDE4 actvcomp" id="PDE4cat">
            <Reactant specieID="PDE4cAMP"/>
            <Product specieID="PDE4"/>
            <Product specieID="AMP"/>
            <forwardRate>0.017233</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PDE4 phosp1" id="phospPDE41">
            <Reactant specieID="PKAc"/>
            <Reactant specieID="PDE4"/>
            <Product specieID="PKAcPDE4"/>
            <forwardRate>4.28E-7</forwardRate>
            <reverseRate>5.6E-4</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PDE4 phosp2" id="phospPDE42">
            <Reactant specieID="PKAcPDE4"/>
            <Product specieID="pPDE4"/>
            <Product specieID="PKAc"/>
            <forwardRate>1.25E-4</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PDE4 d_phosp" id="dphospPDE4">
            <Reactant specieID="pPDE4"/>
            <Product specieID="PDE4"/>
            <forwardRate>2.5E-6</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pPDE4 enzyme1" id="pPDE4bind">
            <Reactant specieID="pPDE4"/>
            <Reactant specieID="cAMP"/>
            <Product specieID="pPDE4cAMP"/>
            <forwardRate>4.33175E-4</forwardRate>
            <reverseRate>1.379</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="pPDE4 actvcomp" id="pPDE4cat">
            <Reactant specieID="pPDE4cAMP"/>
            <Product specieID="pPDE4"/>
            <Product specieID="AMP"/>
            <forwardRate>0.3446674</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PKAc_PDE4_cAMP-bind" id="PKAc_PDE4_cAMP-bind">
            <Reactant specieID="PDE4cAMP"/>
            <Reactant specieID="PKAc"/>
            <Product specieID="PKAc_PDE4_cAMP"/>
            <forwardRate>4.28E-7</forwardRate>
            <reverseRate>5.6E-4</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PKAc_PDE4_cAMP-diss" id="PKAc_PDE4_cAMP-diss">
            <Reactant specieID="PKAc_PDE4_cAMP"/>
            <Product specieID="pPDE4cAMP"/>
            <Product specieID="PKAc"/>
            <forwardRate>1.25E-4</forwardRate>
            <reverseRate>0.0</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
        <Reaction name="PKAcAMP4_diss2" id="PKAcAMP4_diss2">
            <Reactant specieID="PKAcAMP4"/>
            <Product specieID="PKAr"/>
            <Product specieID="PKAc" n="2"/>
            <forwardRate>2.4E-4</forwardRate>
            <reverseRate>2.5500000000000003E-5</reverseRate>
            <Q10>0.2</Q10>
        </Reaction>
    </ReactionScheme>
    <StimulationSet>
        <InjectionStim specieID="ISOIbuf" injectionSite="sa1[0].pointA">
            <rate>0.0025</rate>
            <onset>100000.0</onset>
            <duration>180000.0</duration>
            <end>280000.0</end>
        </InjectionStim>
        <InjectionStim specieID="DaDbuf" injectionSite="sa1[0].pointA">
            <rate>0.0025</rate>
            <onset>100000.0</onset>
            <duration>180000.0</duration>
            <end>280000.0</end>
        </InjectionStim>
        <InjectionStim specieID="CaCbuf" injectionSite="sa1[0].pointA">
            <rate>20.0</rate>
            <onset>100000.0</onset>
            <duration>3.0</duration>
            <period>200.0</period>
            <end>280000.0</end>
        </InjectionStim>
    </StimulationSet>
    <Morphology>
        <SpineType id="spineA">
            <Section width="0.2" at="0.0" regionClass="neck"/>
            <Section width="0.2" at="0.2" regionClass="neck"/>
            <Section width="0.2" at="1.0" regionClass="head"/>
            <Section width="0.6" at="1.1" regionClass="head"/>
            <Section width="0.6" at="1.2" regionClass="PSD"/>
            <Section width="0.2" at="1.3" label="pointA"/>
        </SpineType>
        <Segment id="seg1" region="dendrite">
            <start x="1.0" y="1.0" z="0.0" r="0.3"/>
            <end x="3.0" y="1.0" z="0.0" r="0.3"/>
        </Segment>
        <SpineAllocation id="sa1" spineType="spineA" region="dendrite" lengthDensity="0.4"/>
    </Morphology>
    <InitialConditions>
        <ConcentrationSet>
            <NanoMolarity value="75.0" specieID="Ca"/>
            <NanoMolarity value="2000000.0" specieID="CaOut"/>
            <NanoMolarity value="0.0" specieID="CaOutLeak"/>
            <NanoMolarity value="159982.0" specieID="Calbin"/>
            <NanoMolarity value="18.0" specieID="CalbinC"/>
            <NanoMolarity value="0.0" specieID="Leak"/>
            <NanoMolarity value="0.0" specieID="pmca"/>
            <NanoMolarity value="0.0" specieID="pmcaCa"/>
            <NanoMolarity value="0.0" specieID="ncx"/>
            <NanoMolarity value="0.0" specieID="ncxCa"/>
            <NanoMolarity value="9.0" specieID="ISO"/>
            <NanoMolarity value="2000000.0" specieID="ISOOut"/>
            <NanoMolarity value="2000000.0" specieID="DaOut"/>
            <NanoMolarity value="10.0" specieID="Da"/>
            <NanoMolarity value="0.0" specieID="Dbuf"/>
            <NanoMolarity value="0.0" specieID="DaDbuf"/>
            <NanoMolarity value="1992779.0" specieID="ATP"/>
            <NanoMolarity value="980.0" specieID="AMP"/>
            <NanoMolarity value="58.0" specieID="cAMP"/>
            <NanoMolarity value="1950.0" specieID="Epac1"/>
            <NanoMolarity value="50.0" specieID="Epac1cAMP"/>
            <NanoMolarity value="11468.0" specieID="PDE1"/>
            <NanoMolarity value="295.0" specieID="PDE1CaMCa4"/>
            <NanoMolarity value="0.0" specieID="PDE1CaMCa4cAMP"/>
            <NanoMolarity value="12650.0" specieID="CaM"/>
            <NanoMolarity value="120.0" specieID="CaMCa2"/>
            <NanoMolarity value="3.0" specieID="CaMCa4"/>
            <NanoMolarity value="17992.0" specieID="NgCaM"/>
            <NanoMolarity value="2139.0" specieID="Ng"/>
            <NanoMolarity value="2573.0" specieID="PP2BCaM"/>
            <NanoMolarity value="329.0" specieID="PP2BCaMCa2"/>
            <NanoMolarity value="3.0" specieID="PP2BCaMCa4"/>
            <NanoMolarity value="0.0" specieID="PP2B"/>
            <NanoMolarity value="23000.0" specieID="CK"/>
            <NanoMolarity value="50.0" specieID="CKCaMCa4"/>
            <NanoMolarity value="200.0" specieID="CKpCaMCa4"/>
            <NanoMolarity value="20.0" specieID="CKp"/>
            <NanoMolarity value="0.0" specieID="CKpPP1"/>
            <NanoMolarity value="0.0" specieID="PKAc"/>
            <NanoMolarity value="932.0" specieID="I1"/>
            <NanoMolarity value="0.0" specieID="I1PKAc"/>
            <NanoMolarity value="9.0" specieID="Ip35"/>
            <NanoMolarity value="1322.0" specieID="PP1"/>
            <NanoMolarity value="243.0" specieID="Ip35PP1"/>
            <NanoMolarity value="0.0" specieID="Ip35PP1PP2BCaMCa4"/>
            <NanoMolarity value="0.0" specieID="Ip35PP2BCaMCa4"/>
            <NanoMolarity value="0.0" specieID="pPDE4cAMP"/>
            <NanoMolarity value="0.0" specieID="PKAc_PDE4_cAMP"/>
            <NanoMolarity value="0.0" specieID="PKAcPDE4"/>
            <NanoMolarity value="0.0" specieID="PDE4cAMP"/>
            <NanoMolarity value="1400.0" specieID="PDE4"/>
            <NanoMolarity value="350.0" specieID="pPDE4"/>
        </ConcentrationSet>
        <ConcentrationSet region="head">
            <NanoMolarity value="500.0" specieID="Leak"/>
            <NanoMolarity value="2000.0" specieID="CaOutLeak"/>
            <NanoMolarity value="760.0" specieID="pmca"/>
            <NanoMolarity value="120.0" specieID="pmcaCa"/>
            <NanoMolarity value="14980.0" specieID="ncx"/>
            <NanoMolarity value="120.0" specieID="ncxCa"/>
            <NanoMolarity value="200.0" specieID="bAR"/>
            <NanoMolarity value="0.0" specieID="ISObAR"/>
            <NanoMolarity value="716.0" specieID="GsbAR"/>
            <NanoMolarity value="0.0" specieID="ISObARGs"/>
            <NanoMolarity value="2856.0" specieID="Gs"/>
            <NanoMolarity value="0.0" specieID="GasGDP"/>
            <NanoMolarity value="0.0" specieID="GasGTP"/>
            <NanoMolarity value="0.0" specieID="Gsbg"/>
            <NanoMolarity value="687.0" specieID="GsD1R"/>
            <NanoMolarity value="0.0" specieID="PKAcbAR"/>
            <NanoMolarity value="0.0" specieID="pbAR"/>
            <NanoMolarity value="0.0" specieID="PKAcpbAR"/>
            <NanoMolarity value="0.0" specieID="ppbAR"/>
            <NanoMolarity value="0.0" specieID="PKAcppbAR"/>
            <NanoMolarity value="0.0" specieID="pppbAR"/>
            <NanoMolarity value="0.0" specieID="PKAcpppbAR"/>
            <NanoMolarity value="0.0" specieID="ppppbAR"/>
            <NanoMolarity value="0.0" specieID="ppppbARGi"/>
            <NanoMolarity value="0.0" specieID="PKAcISObAR"/>
            <NanoMolarity value="0.0" specieID="pISObAR"/>
            <NanoMolarity value="0.0" specieID="PKAcpISObAR"/>
            <NanoMolarity value="0.0" specieID="ppISObAR"/>
            <NanoMolarity value="0.0" specieID="PKAcppISObAR"/>
            <NanoMolarity value="0.0" specieID="pppISObAR"/>
            <NanoMolarity value="0.0" specieID="PKAcpppISObAR"/>
            <NanoMolarity value="0.0" specieID="ppppISObAR"/>
            <NanoMolarity value="0.0" specieID="ppppISObARGi"/>
            <NanoMolarity value="2000.0" specieID="Gi"/>
            <NanoMolarity value="0.0" specieID="GaiGTP"/>
            <NanoMolarity value="0.0" specieID="GaiGDP"/>
            <NanoMolarity value="0.0" specieID="Gibg"/>
            <NanoMolarity value="18150.0" specieID="AC1"/>
            <NanoMolarity value="63.0" specieID="AC1CaMCa4"/>
            <NanoMolarity value="900.0" specieID="AC1CaMCa4ATP"/>
            <NanoMolarity value="0.0" specieID="AC1GasGTP"/>
            <NanoMolarity value="0.0" specieID="AC1GasGTPCaMCa4"/>
            <NanoMolarity value="0.0" specieID="AC1GasGTPCaMCa4ATP"/>
            <NanoMolarity value="0.0" specieID="AC1GaiGTP"/>
            <NanoMolarity value="0.0" specieID="AC1GaiGTPCaMCa4"/>
            <NanoMolarity value="0.0" specieID="AC1GaiGTPCaMCa4ATP"/>
            <NanoMolarity value="0.0" specieID="AC1GasGTPGaiGTP"/>
            <NanoMolarity value="0.0" specieID="AC1GasGTPGaiGTPCaMCa4"/>
            <NanoMolarity value="0.0" specieID="AC1GsGiCaMCa4ATP"/>
            <NanoMolarity value="64200.0" specieID="AC8"/>
            <NanoMolarity value="0.0" specieID="AC8CaMCa4"/>
            <NanoMolarity value="500.0" specieID="AC8CaMCa4ATP"/>
            <NanoMolarity value="0.0" specieID="PKAr"/>
            <NanoMolarity value="4000.0" specieID="PKA"/>
            <NanoMolarity value="1848.0" specieID="PKAcAMP2"/>
            <NanoMolarity value="1000.0" specieID="PKAcAMP4"/>
        </ConcentrationSet>
        <ConcentrationSet region="PSD">
            <NanoMolarity value="3000.0" specieID="NMDAR"/>
            <NanoMolarity value="0.0" specieID="PKAcNMDAR"/>
            <NanoMolarity value="1000.0" specieID="pNMDAR"/>
            <NanoMolarity value="0.0" specieID="PP2BpNMDAR"/>
            <NanoMolarity value="7000.0" specieID="GluR1"/>
            <NanoMolarity value="0.0" specieID="GluR1_CKp"/>
            <NanoMolarity value="0.0" specieID="GluR1_CKCaM"/>
            <NanoMolarity value="0.0" specieID="GluR1_CKpCaM"/>
            <NanoMolarity value="2000.0" specieID="GluR1_S831"/>
            <NanoMolarity value="0.0" specieID="GluR1_S831_PP1"/>
            <NanoMolarity value="0.0" specieID="GluR1_PKAc"/>
            <NanoMolarity value="0.0" specieID="GluR1_S831_PKAc"/>
            <NanoMolarity value="1000.0" specieID="GluR1_S845"/>
            <NanoMolarity value="0.0" specieID="GluR1_S845_CKCaM"/>
            <NanoMolarity value="0.0" specieID="GluR1_S845_CKp"/>
            <NanoMolarity value="0.0" specieID="GluR1_S845_CKpCaM"/>
            <NanoMolarity value="0.0" specieID="GluR1_S845_PP1"/>
            <NanoMolarity value="0.0" specieID="GluR1_S845_PP2B"/>
            <NanoMolarity value="0.0" specieID="GluR1_S845_S831"/>
            <NanoMolarity value="0.0" specieID="GluR1_S845_S831_PP2B"/>
            <NanoMolarity value="0.0" specieID="GluR1_S845_S831_PP1"/>
            <NanoMolarity value="500.0" specieID="Leak"/>
            <NanoMolarity value="2000.0" specieID="CaOutLeak"/>
            <NanoMolarity value="660.0" specieID="pmca"/>
            <NanoMolarity value="220.0" specieID="pmcaCa"/>
            <NanoMolarity value="14980.0" specieID="ncx"/>
            <NanoMolarity value="120.0" specieID="ncxCa"/>
        </ConcentrationSet>
        <ConcentrationSet region="neck">
            <NanoMolarity value="500.0" specieID="Leak"/>
            <NanoMolarity value="2000.0" specieID="CaOutLeak"/>
            <NanoMolarity value="660.0" specieID="pmca"/>
            <NanoMolarity value="220.0" specieID="pmcaCa"/>
            <NanoMolarity value="14980.0" specieID="ncx"/>
            <NanoMolarity value="120.0" specieID="ncxCa"/>
        </ConcentrationSet>
        <SurfaceDensitySet region="dendrite">
            <PicoSD specieID="Leak" value="100.0"/>
            <PicoSD specieID="CaOutLeak" value="800.0"/>
            <PicoSD specieID="pmca" value="71.0"/>
            <PicoSD specieID="pmcaCa" value="29.0"/>
            <PicoSD specieID="ncx" value="2840.0"/>
            <PicoSD specieID="ncxCa" value="160.0"/>
            <PicoSD specieID="bAR" value="50.0"/>
            <PicoSD specieID="ISObAR" value="1.0"/>
            <PicoSD specieID="GsbAR" value="378.0"/>
            <PicoSD specieID="ISObARGs" value="0.0"/>
            <PicoSD specieID="Gs" value="954.0"/>
            <PicoSD specieID="GasGTP" value="0.0"/>
            <PicoSD specieID="GasGDP" value="0.0"/>
            <PicoSD specieID="GsD1R" value="322.0"/>
            <PicoSD specieID="DaD1R" value="0.0"/>
            <PicoSD specieID="PKAcbAR" value="0.0"/>
            <PicoSD specieID="pbAR" value="0.0"/>
            <PicoSD specieID="PKAcpbAR" value="0.0"/>
            <PicoSD specieID="ppbAR" value="0.0"/>
            <PicoSD specieID="PKAcppbAR" value="0.0"/>
            <PicoSD specieID="pppbAR" value="0.0"/>
            <PicoSD specieID="PKAcpppbAR" value="0.0"/>
            <PicoSD specieID="ppppbAR" value="0.0"/>
            <PicoSD specieID="ppppbARGi" value="0.0"/>
            <PicoSD specieID="PKAcISObAR" value="0.0"/>
            <PicoSD specieID="pISObAR" value="0.0"/>
            <PicoSD specieID="PKAcpISObAR" value="0.0"/>
            <PicoSD specieID="ppISObAR" value="0.0"/>
            <PicoSD specieID="PKAcppISObAR" value="0.0"/>
            <PicoSD specieID="pppISObAR" value="0.0"/>
            <PicoSD specieID="PKAcpppISObAR" value="0.0"/>
            <PicoSD specieID="ppppISObAR" value="0.0"/>
            <PicoSD specieID="ppppISObARGi" value="0.0"/>
            <PicoSD specieID="Gi" value="826.0"/>
            <PicoSD specieID="GaiGTP" value="0.0"/>
            <PicoSD specieID="GaiGDP" value="0.0"/>
            <PicoSD specieID="Gibg" value="0.0"/>
            <PicoSD specieID="AC1" value="1700.0"/>
            <PicoSD specieID="AC1CaMCa4" value="0.0"/>
            <PicoSD specieID="AC1CaMCa4ATP" value="32.0"/>
            <PicoSD specieID="AC1GasGTP" value="0.0"/>
            <PicoSD specieID="AC1GasGTPCaMCa4" value="0.0"/>
            <PicoSD specieID="AC1GasGTPCaMCa4ATP" value="0.0"/>
            <PicoSD specieID="AC1GaiGTP" value="0.0"/>
            <PicoSD specieID="AC1GaiGTPCaMCa4" value="0.0"/>
            <PicoSD specieID="AC1GaiGTPCaMCa4ATP" value="0.0"/>
            <PicoSD specieID="AC1GasGTPGaiGTP" value="0.0"/>
            <PicoSD specieID="AC1GasGTPGaiGTPCaMCa4" value="0.0"/>
            <PicoSD specieID="AC1GsGiCaMCa4ATP" value="0.0"/>
            <PicoSD specieID="AC8" value="470.0"/>
            <PicoSD specieID="AC8CaMCa4" value="0.0"/>
            <PicoSD specieID="AC8CaMCa4ATP" value="5.0"/>
            <PicoSD specieID="PKA" value="223.0"/>
            <PicoSD specieID="PKAr" value="0.0"/>
            <PicoSD specieID="PKAcAMP2" value="3.0"/>
            <PicoSD specieID="PKAcAMP4" value="0.0"/>
        </SurfaceDensitySet>
    </InitialConditions>
    <OutputScheme>
        <OutputSet filename="out" outputInterval="10.0">
            <OutputSpecie name="Ca"/>
            <OutputSpecie name="CaCbuf"/>
            <OutputSpecie name="Cbuf"/>
            <OutputSpecie name="CaOut"/>
        </OutputSet>
    </OutputScheme>
    <discretization>
        <spineDeltaX>0.1</spineDeltaX>
        <defaultMaxElementSide>0.2</defaultMaxElementSide>
        <maxElementSide region="dendrite">0.12</maxElementSide>
    </discretization>
    <geometry>2D</geometry>
    <depth2D>0.6</depth2D>
    <runtime>1000000.0</runtime>
    <spineSeed>123</spineSeed>
    <simulationSeed>245</simulationSeed>
    <fixedStepDt>1.0</fixedStepDt>
    <outputInterval>200.0</outputInterval>
    <outputQuantity>NUMBER</outputQuantity>
    <tolerance>0.006</tolerance>
    <leap_min_jump>2.0</leap_min_jump>
    <calculation>GRID_ADAPTIVE</calculation>
    <distribution>BINOMIAL</distribution>
    <algorithm>INDEPENDENT</algorithm>
</SDRun>
